<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.3.0">
  <Workflow xmlns:xsd="http://www.w3.org/2001/XMLSchema" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:q3="clr-namespace:Bonsai.IO;assembly=Bonsai.System" xmlns:q2="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision" xmlns:q1="clr-namespace:Bonsai.PointGrey;assembly=Bonsai.PointGrey" xmlns="https://horizongir.org/bonsai">
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:FlyCapture">
          <q1:Index>0</q1:Index>
          <q1:ColorProcessing>Default</q1:ColorProcessing>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Source.Image</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Source.Metadata.embeddedTimeStamp</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Timestamp" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Source.Value</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Zip" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:VideoWriter">
          <q2:FileName>_iblrig_leftCamera.raw.avi</q2:FileName>
          <q2:Suffix>None</q2:Suffix>
          <q2:Buffered>true</q2:Buffered>
          <q2:Overwrite>false</q2:Overwrite>
          <q2:FourCC>FMP4</q2:FourCC>
          <q2:FrameRate>30</q2:FrameRate>
          <q2:FrameSize>
            <q2:Width>0</q2:Width>
            <q2:Height>0</q2:Height>
          </q2:FrameSize>
          <q2:ResizeInterpolation>NearestNeighbor</q2:ResizeInterpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="q3:CsvWriter">
        <q3:FileName>_iblrig_leftCamera.timestamps.ssv</q3:FileName>
        <q3:Append>false</q3:Append>
        <q3:Overwrite>false</q3:Overwrite>
        <q3:Suffix>None</q3:Suffix>
        <q3:IncludeHeader>false</q3:IncludeHeader>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Source.Timestamp</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="SubscribeWhen" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>false</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="Equal">
              <Operand xsi:type="BooleanProperty">
                <Value>true</Value>
              </Operand>
            </Expression>
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>2</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>2</From>
              <To>1</To>
              <Label>Source1</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="ExternalizedPropertyOfBooleanBooleanProperty">
        <MemberName>Value</MemberName>
        <Name>SaveVideo</Name>
        <Value>false</Value>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="SubscribeWhen" />
      </Expression>
      <Expression xsi:type="Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="Equal">
              <Operand xsi:type="BooleanProperty">
                <Value>true</Value>
              </Operand>
            </Expression>
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>2</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>2</From>
              <To>1</To>
              <Label>Source1</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="ExternalizedPropertyOfStringCsvWriter">
        <MemberName>FileName</MemberName>
        <Name>TimestampsFileName</Name>
        <Value>_iblrig_leftCamera.timestamps.ssv</Value>
      </Expression>
      <Expression xsi:type="ExternalizedPropertyOfStringVideoWriter">
        <MemberName>FileName</MemberName>
        <Name>VideoFileName</Name>
        <Value>_iblrig_leftCamera.raw.avi</Value>
      </Expression>
    </Nodes>
    <Edges>
      <Edge>
        <From>0</From>
        <To>1</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>0</From>
        <To>2</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>1</From>
        <To>3</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>2</From>
        <To>5</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>3</From>
        <To>4</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>3</From>
        <To>8</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>4</From>
        <To>6</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>5</From>
        <To>7</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>6</From>
        <To>9</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>7</From>
        <To>13</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>8</From>
        <To>5</To>
        <Label>Source2</Label>
      </Edge>
      <Edge>
        <From>10</From>
        <To>11</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>10</From>
        <To>14</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>11</From>
        <To>9</To>
        <Label>Source2</Label>
      </Edge>
      <Edge>
        <From>12</From>
        <To>10</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>14</From>
        <To>13</To>
        <Label>Source2</Label>
      </Edge>
      <Edge>
        <From>15</From>
        <To>7</To>
        <Label>Source2</Label>
      </Edge>
      <Edge>
        <From>16</From>
        <To>6</To>
        <Label>Source2</Label>
      </Edge>
    </Edges>
  </Workflow>
  <ExtensionTypes>
    <Type>Bonsai.PointGrey.FlyCapture, Bonsai.PointGrey, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Timestamp, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Zip, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.VideoWriter, Bonsai.Vision, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.IO.CsvWriter, Bonsai.System, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.SubscribeWhen, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.BooleanProperty, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.EqualBuilder, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.ExternalizedProperty`2[[System.Boolean, mscorlib, Version=4.0.0.0, Culture=neutral, PublicKeyToken=b77a5c561934e089],[Bonsai.Expressions.BooleanProperty, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null]], Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.ExternalizedProperty`2[[System.String, mscorlib, Version=4.0.0.0, Culture=neutral, PublicKeyToken=b77a5c561934e089],[Bonsai.IO.CsvWriter, Bonsai.System, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null]], Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.ExternalizedProperty`2[[System.String, mscorlib, Version=4.0.0.0, Culture=neutral, PublicKeyToken=b77a5c561934e089],[Bonsai.Vision.VideoWriter, Bonsai.Vision, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null]], Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
  </ExtensionTypes>
</WorkflowBuilder>